PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '$date_str', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Session_01
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Adapt
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    TextComponent text_2
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = +
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    KeyboardComponent key_resp_3
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent sound_2
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_01/02_Adapt.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine Resting_EC
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    TextComponent text_3
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180.0
      text = +
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    KeyboardComponent key_resp_4
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent sound_3
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_01/03_Resting_EC.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    SerialOutComponent serialPort
      deviceLabel = COM
      getResponse = False
      startDataBinary = 1
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 1
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 0.0
      stopDataBinary = 2
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [duration (s)] = 180
      syncScreenRefresh = False
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  Routine Resting_EO
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    TextComponent text_4
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180.0
      text = +
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    KeyboardComponent key_resp_5
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent sound_4
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_01/04_Resting_EO.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    SerialOutComponent serialPort_4
      deviceLabel = COM
      getResponse = False
      startDataBinary = 1
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 0.0
      stopDataBinary = 2
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [duration (s)] = 180
      syncScreenRefresh = False
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  Routine ExpIntro
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    TextComponent text_5
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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      text:
        请判断面孔的情绪是正性还是负性，
        忽略面孔上叠加词语的含义。
        请在保证正确的前提下尽快按键反应。
    KeyboardComponent key_resp_6
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    SoundComponent sound_5
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_01/05_ExpIntro.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Welcome
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    TextComponent text
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 准备好后按下y键以开始
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    KeyboardComponent key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_01/01_Welcome.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Ending
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    TextComponent text_9
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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    SoundComponent sound_6
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_01/08_RestPrompt.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent key_resp_7
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SerialOutComponent serialPort_5
      deviceLabel = COM
      getResponse = False
      startDataBinary = 1
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 0.0
      stopDataBinary = 2
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
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  Routine Training2Main
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    TextComponent text_13
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        训练结束
        按q以开始正式试验
    KeyboardComponent key_resp_9
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrainingStim
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    ImageComponent image
      image [set every repeat] = $facepath
      saveStartStop = False
      size = (0.548, 0.8)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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    TextComponent text_10
      color = $(1.0000, -1.0000, -1.0000)
      font = Noto Sans SC
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text [set every repeat] = $word
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  Routine TrainingResp
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    TextComponent text_8
      font = Noto Sans SC
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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      text:
        正性面孔 → 请按 f 键（左手食指）
        负性面孔 → 请按 j 键（右手食指）
    KeyboardComponent key_resp_8
      allowedKeys = 'f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      store = nothing
      syncScreenRefresh = False
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  Routine TrainingITI
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    TextComponent text_11
      durationEstim = 1
      font = Noto Sans SC
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
      syncScreenRefresh = False
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  Routine TrainingAns
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    TextComponent text_12
      font = Noto Sans SC
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      syncScreenRefresh = False
      text [set every repeat] = ansline1 + '\n' + ansline2 + '\n' + ansline3 + '\n' + ansline4
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    KeyboardComponent key_resp_2
      allowedKeys = 'q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = nothing
      syncScreenRefresh = False
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  Routine MainStim
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    ImageComponent image_2
      image [set every repeat] = $facepath
      size = (0.548, 0.8)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    TextComponent text_16
      color = $(1.0000, -1.0000, -1.0000)
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $word
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    SerialOutComponent serialPort_2
      deviceLabel = COM
      getResponse = False
      startDataBinary = 3
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 0.0
      stopDataBinary = 4
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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  Routine MainResp
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    TextComponent text_17
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        正性面孔 → 请按 f 键（左手食指）
        负性面孔 → 请按 j 键（右手食指）
    KeyboardComponent key_resp_10
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    SerialOutComponent serialPort_3
      deviceLabel = COM
      durationEstim = 1
      getResponse = False
      startDataBinary = 5
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 0.0
      stopDataBinary = 6
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [condition] = key_resp_10.keys
      syncScreenRefresh = False
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  Routine MainITI
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    TextComponent text_18
      durationEstim = 1
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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  Routine TrainingISI
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    TextComponent text_19
      font = Noto Sans SC
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
      text = +
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    TextComponent text_20
      durationEstim = 0.4
      font = Noto Sans SC
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $jitter
      syncScreenRefresh = False
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  Routine MainISI
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    TextComponent text_21
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_22
      durationEstim = 0.4
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $jitter
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  CounterbalanceRoutine counterbalance
    endExperimentOnDepletion = True
    nGroups = 2
    nReps = 1
    nSlots = 10
    saveData = True
    saveRemaining = True
    specMode = uniform
Flow
  Routine Welcome
  Routine Adapt
  Routine Resting_EC
  Routine ExpIntro
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = Session_01/Session_01_260607_training.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition', '正性一致'), ('participant_id', 'woman_sub17'), ('face_emotion', 'happiness'), ('face_valence', 'positive'), ('word', '顺  利'), ('word_valence', 'positive'), ('word_Valence_Mean', np.float64(1.95)), ('word_Arousal_Mean', np.float64(2.39)), ('word_subTF', np.int64(1454)), ('word_Familiarity', np.float64(6.181818182)), ('word_NOM', np.int64(1)), ('jitter', np.float64(0.47)), ('iti', np.float64(0.88)), ('ansline1', '当前面孔为正性，表现为高兴'), ('ansline2', '判断时应忽略叠加的情绪词顺利的含义'), ('ansline3', '按键F为正性面孔，按键J为负性面孔'), ('ansline4', '所以本次trial应当按下F'), ('facepath', 'Session_01/Emotional_faces_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,
      OrderedDict([('condition', '正性一致'), ('participant_id', 'man_sub12'), ('face_emotion', 'happiness'), ('face_valence', 'positive'), ('word', '伟  大'), ('word_valence', 'positive'), ('word_Valence_Mean', np.float64(2.23)), ('word_Arousal_Mean', np.float64(2.77)), ('word_subTF', np.int64(1392)), ('word_Familiarity', np.float64(5.904761905)), ('word_NOM', np.int64(1)), ('jitter', np.float64(0.42)), ('iti', np.float64(0.88)), ('ansline1', '当前面孔为正性，表现为高兴'), ('ansline2', '判断时应忽略叠加的情绪词伟大的含义'), ('ansline3', '按键F为正性面孔，按键J为负性面孔'), ('ansline4', '所以本次trial应当按下F'), ('facepath', 'Session_01/Emotional_faces_gra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,
      OrderedDict([('condition', '正性一致'), ('participant_id', 'man_sub5'), ('face_emotion', 'happiness'), ('face_valence', 'positive'), ('word', '活  泼'), ('word_valence', 'positive'), ('word_Valence_Mean', np.float64(1.96)), ('word_Arousal_Mean', np.float64(3.0)), ('word_subTF', np.int64(131)), ('word_Familiarity', np.float64(5.272727273)), ('word_NOM', np.int64(1)), ('jitter', np.float64(0.5)), ('iti', np.float64(0.83)), ('ansline1', '当前面孔为正性，表现为高兴'), ('ansline2', '判断时应忽略叠加的情绪词活泼的含义'), ('ansline3', '按键F为正性面孔，按键J为负性面孔'), ('ansline4', '所以本次trial应当按下F'), ('facepath', 'Session_01/Emotional_faces_gray/ma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,
      OrderedDict([('condition', '正性一致'), ('participant_id', 'man_sub1'), ('face_emotion', 'happiness'), ('face_valence', 'positive'), ('word', '表  扬'), ('word_valence', 'positive'), ('word_Valence_Mean', np.float64(2.16)), ('word_Arousal_Mean', np.float64(3.33)), ('word_subTF', np.int64(114)), ('word_Familiarity', np.float64(5.954545455)), ('word_NOM', np.int64(1)), ('jitter', np.float64(0.32)), ('iti', np.float64(0.88)), ('ansline1', '当前面孔为正性，表现为高兴'), ('ansline2', '判断时应忽略叠加的情绪词表扬的含义'), ('ansline3', '按键F为正性面孔，按键J为负性面孔'), ('ansline4', '所以本次trial应当按下F'), ('facepath', 'Session_01/Emotional_faces_gray/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
    Routine TrainingISI
    Routine TrainingStim
    Routine TrainingResp
    Routine TrainingITI
    Routine TrainingAns
  LoopTerminator trials_3
  Routine Training2Main
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Session_01/Session_01_260607_partA.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition', '负性一致'), ('participant_id', 'man_sub14'), ('face_emotion', 'disgust'), ('face_valence', 'negative'), ('word', '悲哀'), ('word_valence', 'negative'), ('word_Valence_Mean', np.float64(-1.92)), ('word_Arousal_Mean', np.float64(2.0)), ('word_subTF', np.int64(278)), ('word_Familiarity', np.float64(6.0)), ('word_NOM', np.int64(1)), ('jitter', np.float64(0.39)), ('iti', np.float64(0.95)), ('facepath', 'Session_01/Emotional_faces_gray/man_sub14/disgust.jpg')]),
      OrderedDict([('condition', '负性一致'), ('participant_id', 'woman_sub51'), ('face_emotion', 'disgust'), ('face_valence', 'negative'), ('word', '欺骗'), ('word_valence', 'negative'), ('word_Valence_Mean', np.float64(-2.0)), ('word_Arousal_Mean', np.float64(2.96)), ('word_subTF', np.int64(726)), ('word_Familiarity', np.float64(5.681818182)), ('word_NOM', np.int64(1)), ('jitter', np.float64(0.37)), ('iti', np.float64(1.11)), ('facepath', 'Session_01/Emotional_faces_gray/woman_sub51/disgust.jpg')]),
      OrderedDict([('condition', '负性一致'), ('participant_id', 'woman_sub36'), ('face_emotion', 'fear'), ('face_valence', 'negative'), ('word', '慌张'), ('word_valence', 'negative'), ('word_Valence_Mean', np.float64(-1.52)), ('word_Arousal_Mean', np.float64(2.84)), ('word_subTF', np.int64(80)), ('word_Familiarity', np.float64(6.454545455)), ('word_NOM', np.int64(1)), ('jitter', np.float64(0.41)), ('iti', np.float64(1.16)), ('facepath', 'Session_01/Emotional_faces_gray/woman_sub36/fear.jpg')]),
      OrderedDict([('condition', '负脸正词'), ('participant_id', 'woman_sub36'), ('face_emotion', 'disgust'), ('face_valence', 'negative'), ('word', '顺利'), ('word_valence', 'positive'), ('word_Valence_Mean', np.float64(1.95)), ('word_Arousal_Mean', np.float64(2.39)), ('word_subTF', np.int64(1454)), ('word_Familiarity', np.float64(6.181818182)), ('word_NOM', np.int64(1)), ('jitter', np.float64(0.4)), ('iti', np.float64(0.97)), ('facepath', 'Session_01/Emotional_faces_gray/woman_sub36/disgust.jpg')])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
    Routine MainISI
    Routine MainStim
    Routine MainResp
    Routine MainITI
  LoopTerminator trials
  Routine Resting_EO
  Routine ExpIntro
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Session_01/Session_01_260607_partB.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition', '负脸正词'), ('participant_id', 'woman_sub46'), ('face_emotion', 'fear'), ('face_valence', 'negative'), ('word', '亲切'), ('word_valence', 'positive'), ('word_Valence_Mean', np.float64(1.8)), ('word_Arousal_Mean', np.float64(2.38)), ('word_subTF', np.int64(148)), ('word_Familiarity', np.float64(6.0)), ('word_NOM', np.int64(2)), ('jitter', np.float64(0.32)), ('iti', np.float64(0.92)), ('facepath', 'Session_01/Emotional_faces_gray/woman_sub46/fear.jpg')]),
      OrderedDict([('condition', '正性一致'), ('participant_id', 'man_sub54'), ('face_emotion', 'happiness'), ('face_valence', 'positive'), ('word', '礼貌'), ('word_valence', 'positive'), ('word_Valence_Mean', np.float64(2.0)), ('word_Arousal_Mean', np.float64(2.38)), ('word_subTF', np.int64(723)), ('word_Familiarity', np.float64(6.090909091)), ('word_NOM', np.int64(1)), ('jitter', np.float64(0.44)), ('iti', np.float64(0.86)), ('facepath', 'Session_01/Emotional_faces_gray/man_sub54/happiness.jpg')]),
      OrderedDict([('condition', '正性一致'), ('participant_id', 'woman_sub19'), ('face_emotion', 'happiness'), ('face_valence', 'positive'), ('word', '刻苦'), ('word_valence', 'positive'), ('word_Valence_Mean', np.float64(1.92)), ('word_Arousal_Mean', np.float64(2.5)), ('word_subTF', np.int64(60)), ('word_Familiarity', np.float64(6.136363636)), ('word_NOM', np.int64(2)), ('jitter', np.float64(0.49)), ('iti', np.float64(1.09)), ('facepath', 'Session_01/Emotional_faces_gray/woman_sub19/happiness.jpg')]),
      OrderedDict([('condition', '负脸正词'), ('participant_id', 'woman_sub12'), ('face_emotion', 'disgust'), ('face_valence', 'negative'), ('word', '荣誉'), ('word_valence', 'positive'), ('word_Valence_Mean', np.float64(2.31)), ('word_Arousal_Mean', np.float64(2.95)), ('word_subTF', np.int64(487)), ('word_Familiarity', np.float64(6.318181818)), ('word_NOM', np.int64(1)), ('jitter', np.float64(0.45)), ('iti', np.float64(1.12)), ('facepath', 'Session_01/Emotional_faces_gray/woman_sub12/disgust.jpg')])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
    Routine MainISI
    Routine MainStim
    Routine MainResp
    Routine MainITI
  LoopTerminator trials_2
  Routine Ending
