PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '$date_str', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Session_01
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Adapt
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    TextComponent text_2
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = +
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    KeyboardComponent key_resp_3
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent sound_2
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_01/02_Adapt.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine Resting_EC
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    TextComponent text_3
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180.0
      text = +
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    KeyboardComponent key_resp_4
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent sound_3
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_01/03_Resting_EC.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        # ── Alignment START Marker ──
        # Paste into Code Component > Begin Routine (at start of recording block)
        # 5-byte coded sequence: 0x01→0x02→0x04→0x02→0x01
        # fNIRS: CH0→CH1→CH2→CH1→CH0 | Synamp: 160→224→208→224→160
        serialPort = deviceManager.getDevice('COM')
        seq = [0x01, 0x02, 0x04, 0x02, 0x01]
        gap = 0.3
        for b in seq:
            serialPort.sendMessage(chr(0))
            clock.time.sleep(0.003)
            serialPort.sendMessage(chr(b))
            clock.time.sleep(0.005)
            serialPort.sendMessage(chr(0))
            clock.time.sleep(gap)
      End Routine:
        # ── Alignment END Marker ──
        # Paste into Code Component > End Routine (at end of recording block)
        # 5-byte coded sequence: 0x04→0x02→0x01→0x02→0x04
        # fNIRS: CH2→CH1→CH0→CH1→CH2 | Synamp: 208→224→160→224→208
        serialPort = deviceManager.getDevice('COM')
        seq = [0x04, 0x02, 0x01, 0x02, 0x04]
        gap = 0.3
        for b in seq:
            serialPort.sendMessage(chr(0))
            clock.time.sleep(0.003)
            serialPort.sendMessage(chr(b))
            clock.time.sleep(0.005)
            serialPort.sendMessage(chr(0))
            clock.time.sleep(gap)
  Routine Resting_EO
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    TextComponent text_4
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180.0
      text = +
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    KeyboardComponent key_resp_5
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent sound_4
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_01/04_Resting_EO.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        # ── Alignment START Marker ──
        # Paste into Code Component > Begin Routine (at start of recording block)
        # 5-byte coded sequence: 0x01→0x02→0x04→0x02→0x01
        # fNIRS: CH0→CH1→CH2→CH1→CH0 | Synamp: 160→224→208→224→160
        serialPort = deviceManager.getDevice('COM')
        seq = [0x01, 0x02, 0x04, 0x02, 0x01]
        gap = 0.3
        for b in seq:
            serialPort.sendMessage(chr(0))
            clock.time.sleep(0.003)
            serialPort.sendMessage(chr(b))
            clock.time.sleep(0.005)
            serialPort.sendMessage(chr(0))
            clock.time.sleep(gap)
      End Routine:
        # ── Alignment END Marker ──
        # Paste into Code Component > End Routine (at end of recording block)
        # 5-byte coded sequence: 0x04→0x02→0x01→0x02→0x04
        # fNIRS: CH2→CH1→CH0→CH1→CH2 | Synamp: 208→224→160→224→208
        serialPort = deviceManager.getDevice('COM')
        seq = [0x04, 0x02, 0x01, 0x02, 0x04]
        gap = 0.3
        for b in seq:
            serialPort.sendMessage(chr(0))
            clock.time.sleep(0.003)
            serialPort.sendMessage(chr(b))
            clock.time.sleep(0.005)
            serialPort.sendMessage(chr(0))
            clock.time.sleep(gap)
  Routine ExpIntro
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    TextComponent text_5
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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      text:
        请判断面孔的情绪是正性还是负性，
        忽略面孔上叠加词语的含义。
        请在保证正确的前提下尽快按键反应。
    KeyboardComponent key_resp_6
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    SoundComponent sound_5
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_01/05_ExpIntro.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Welcome
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    TextComponent text
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 准备好后按下y键以开始
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    KeyboardComponent key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_01/01_Welcome.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Ending
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    TextComponent text_9
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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    SoundComponent sound_6
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_01/08_RestPrompt.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    KeyboardComponent key_resp_7
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SerialOutComponent serialPort_5
      deviceLabel = COM
      getResponse = False
      startDataBinary = 1
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 0.0
      stopDataBinary = 2
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
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  Routine Training2Main
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    TextComponent text_13
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        训练结束
        按q以开始正式试验
    KeyboardComponent key_resp_9
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
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      End Routine:
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  Routine TrainingStim
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    ImageComponent image
      image [set every repeat] = $train_facepath
      saveStartStop = False
      size = (0.548, 0.8)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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    TextComponent text_10
      color = $(1.0000, -1.0000, -1.0000)
      font = Noto Sans SC
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      text [set every repeat] = $train_word
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  Routine TrainingResp
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    TextComponent text_8
      font = Noto Sans SC
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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      text:
        正性面孔 → 请按 f 键（左手食指）
        负性面孔 → 请按 j 键（右手食指）
    KeyboardComponent key_resp_8
      allowedKeys = 'f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      store = nothing
      syncScreenRefresh = False
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  Routine TrainingITI
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    TextComponent text_11
      durationEstim = 1
      font = Noto Sans SC
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $train_iti
      syncScreenRefresh = False
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  Routine TrainingAns
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    TextComponent text_12
      font = Noto Sans SC
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      syncScreenRefresh = False
      text [set every repeat] = train_ansline1 + '\n' + train_ansline2 + '\n' + train_ansline3 + '\n' + train_ansline4
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    KeyboardComponent key_resp_2
      allowedKeys = 'q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = nothing
      syncScreenRefresh = False
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  Routine MainStim
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    ImageComponent image_2
      image [set every repeat] = $partA_facepath
      size = (0.548, 0.8)
      startVal [time (s)] = 0
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    TextComponent text_16
      color = $(1.0000, -1.0000, -1.0000)
      font = Noto Sans SC
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every repeat] = $partA_word
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    KeyboardComponent key_resp_12
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SerialOutComponent serialPort_2
      deviceLabel = COM
      getResponse = False
      startDataBinary = 100
      startDataChar = \x04
      startDataCode = b'\x04'
      startDataNumeric = 4
      startDataType = num
      startVal [time (s)] = 0.0
      stopDataBinary = 10
      stopDataChar = \x02
      stopDataCode = b'\x02'
      stopDataNumeric = 2
      stopDataType = num
      stopVal [condition] = key_resp_12.keys
      syncScreenRefresh = False
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  Routine MainResp
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    TextComponent text_17
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        正性面孔 → 请按 f 键（左手食指）
        负性面孔 → 请按 j 键（右手食指）
    KeyboardComponent key_resp_10
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SerialOutComponent serialPort_3
      deviceLabel = COM
      getResponse = False
      startDataBinary = 1001
      startDataChar = \t
      startDataCode = b'\t'
      startDataNumeric = 9
      startDataType = num
      startVal [time (s)] = 0.0
      stopDataBinary = 1101
      stopDataChar = \r
      stopDataCode = b'\r'
      stopDataNumeric = 13
      stopDataType = num
      stopVal [condition] = key_resp_10.keys
      syncScreenRefresh = False
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  Routine MainITI
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    TextComponent text_18
      durationEstim = 1
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $partA_iti
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  Routine TrainingISI
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    TextComponent text_19
      font = Noto Sans SC
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
      text = +
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    TextComponent text_20
      durationEstim = 0.4
      font = Noto Sans SC
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $train_jitter
      syncScreenRefresh = False
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  Routine MainISI
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    TextComponent text_21
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_22
      durationEstim = 0.4
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $partA_jitter
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  Routine MainStim_B
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    ImageComponent image_3
      image [set every repeat] = $partB_facepath
      size = (0.548, 0.8)
      startVal [time (s)] = 0
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    TextComponent text_23
      color = $(1.0000, -1.0000, -1.0000)
      font = Noto Sans SC
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every repeat] = $partB_word
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    KeyboardComponent key_resp_13
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SerialOutComponent serialPort_9
      deviceLabel = COM
      getResponse = False
      startDataBinary = 100
      startDataChar = \x04
      startDataCode = b'\x04'
      startDataNumeric = 4
      startDataType = num
      startVal [time (s)] = 0.0
      stopDataBinary = 10
      stopDataChar = \x02
      stopDataCode = b'\x02'
      stopDataNumeric = 2
      stopDataType = num
      stopVal [condition] = key_resp_13.keys
      syncScreenRefresh = False
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  Routine MainResp_B
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    TextComponent text_24
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        正性面孔 → 请按 f 键（左手食指）
        负性面孔 → 请按 j 键（右手食指）
    KeyboardComponent key_resp_11
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SerialOutComponent serialPort_10
      deviceLabel = COM
      getResponse = False
      startDataBinary = 1010
      startDataChar = \n
      startDataCode = b'\n'
      startDataNumeric = 10
      startDataType = num
      startVal [time (s)] = 0.0
      stopDataBinary = 1111
      stopDataChar = \x0F
      stopDataCode = b'\x0F'
      stopDataNumeric = 15
      stopDataType = num
      stopVal [condition] = key_resp_11.keys
      syncScreenRefresh = False
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  Routine MainITI_B
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    TextComponent text_25
      durationEstim = 1
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $partB_iti
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  Routine MainISI_B
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    TextComponent text_26
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent text_27
      durationEstim = 0.4
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $partB_jitter
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  Routine endroutinecode
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
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  Routine beginroutinecode
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_5
      Code Type = Py
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      End Routine:
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  CounterbalanceRoutine counterbalance
    endExperimentOnDepletion = True
    nGroups = 2
    nReps = 1
    nSlots = 10
    saveData = True
    saveRemaining = True
    specMode = uniform
Flow
  Routine Welcome
  Routine Adapt
  Routine Resting_EC
  Routine ExpIntro
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = Session_01/Session_01_260607_training.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('train_condition', '正性一致'), ('train_participant_id', 'woman_sub17'), ('train_face_emotion', 'happiness'), ('train_face_valence', 'positive'), ('train_word', '顺  利'), ('train_word_valence', 'positive'), ('train_word_Valence_Mean', np.float64(1.95)), ('train_word_Arousal_Mean', np.float64(2.39)), ('train_word_subTF', np.int64(1454)), ('train_word_Familiarity', np.float64(6.181818182)), ('train_word_NOM', np.int64(1)), ('train_jitter', np.float64(0.47)), ('train_iti', np.float64(0.88)), ('train_ansline1', '当前面孔为正性，表现为高兴'), ('train_ansline2', '判断时应忽略叠加的情绪词顺利的含义'), ('train_ansline3',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,
      OrderedDict([('train_condition', '正性一致'), ('train_participant_id', 'man_sub12'), ('train_face_emotion', 'happiness'), ('train_face_valence', 'positive'), ('train_word', '伟  大'), ('train_word_valence', 'positive'), ('train_word_Valence_Mean', np.float64(2.23)), ('train_word_Arousal_Mean', np.float64(2.77)), ('train_word_subTF', np.int64(1392)), ('train_word_Familiarity', np.float64(5.904761905)), ('train_word_NOM', np.int64(1)), ('train_jitter', np.float64(0.42)), ('train_iti', np.float64(0.88)), ('train_ansline1', '当前面孔为正性，表现为高兴'), ('train_ansline2', '判断时应忽略叠加的情绪词伟大的含义'), ('train_ansline3', '按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,
      OrderedDict([('train_condition', '正性一致'), ('train_participant_id', 'man_sub5'), ('train_face_emotion', 'happiness'), ('train_face_valence', 'positive'), ('train_word', '活  泼'), ('train_word_valence', 'positive'), ('train_word_Valence_Mean', np.float64(1.96)), ('train_word_Arousal_Mean', np.float64(3.0)), ('train_word_subTF', np.int64(131)), ('train_word_Familiarity', np.float64(5.272727273)), ('train_word_NOM', np.int64(1)), ('train_jitter', np.float64(0.5)), ('train_iti', np.float64(0.83)), ('train_ansline1', '当前面孔为正性，表现为高兴'), ('train_ansline2', '判断时应忽略叠加的情绪词活泼的含义'), ('train_ansline3', '按键F为正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,
      OrderedDict([('train_condition', '正性一致'), ('train_participant_id', 'man_sub1'), ('train_face_emotion', 'happiness'), ('train_face_valence', 'positive'), ('train_word', '表  扬'), ('train_word_valence', 'positive'), ('train_word_Valence_Mean', np.float64(2.16)), ('train_word_Arousal_Mean', np.float64(3.33)), ('train_word_subTF', np.int64(114)), ('train_word_Familiarity', np.float64(5.954545455)), ('train_word_NOM', np.int64(1)), ('train_jitter', np.float64(0.32)), ('train_iti', np.float64(0.88)), ('train_ansline1', '当前面孔为正性，表现为高兴'), ('train_ansline2', '判断时应忽略叠加的情绪词表扬的含义'), ('train_ansline3', '按键F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
    Routine TrainingISI
    Routine TrainingStim
    Routine TrainingResp
    Routine TrainingITI
    Routine TrainingAns
  LoopTerminator trials_3
  Routine Training2Main
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Session_01/Session_01_260607_partA.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('partA_condition', '负性一致'), ('partA_participant_id', 'man_sub14'), ('partA_face_emotion', 'disgust'), ('partA_face_valence', 'negative'), ('partA_word', '悲哀'), ('partA_word_valence', 'negative'), ('partA_word_Valence_Mean', np.float64(-1.92)), ('partA_word_Arousal_Mean', np.float64(2.0)), ('partA_word_subTF', np.int64(278)), ('partA_word_Familiarity', np.float64(6.0)), ('partA_word_NOM', np.int64(1)), ('partA_jitter', np.float64(0.39)), ('partA_iti', np.float64(0.95)), ('partA_facepath', 'Session_01/Emotional_faces_gray/man_sub14/disgust.jpg')]),
      OrderedDict([('partA_condition', '负性一致'), ('partA_participant_id', 'woman_sub51'), ('partA_face_emotion', 'disgust'), ('partA_face_valence', 'negative'), ('partA_word', '欺骗'), ('partA_word_valence', 'negative'), ('partA_word_Valence_Mean', np.float64(-2.0)), ('partA_word_Arousal_Mean', np.float64(2.96)), ('partA_word_subTF', np.int64(726)), ('partA_word_Familiarity', np.float64(5.681818182)), ('partA_word_NOM', np.int64(1)), ('partA_jitter', np.float64(0.37)), ('partA_iti', np.float64(1.11)), ('partA_facepath', 'Session_01/Emotional_faces_gray/woman_sub51/disgust.jpg')]),
      OrderedDict([('partA_condition', '负性一致'), ('partA_participant_id', 'woman_sub36'), ('partA_face_emotion', 'fear'), ('partA_face_valence', 'negative'), ('partA_word', '慌张'), ('partA_word_valence', 'negative'), ('partA_word_Valence_Mean', np.float64(-1.52)), ('partA_word_Arousal_Mean', np.float64(2.84)), ('partA_word_subTF', np.int64(80)), ('partA_word_Familiarity', np.float64(6.454545455)), ('partA_word_NOM', np.int64(1)), ('partA_jitter', np.float64(0.41)), ('partA_iti', np.float64(1.16)), ('partA_facepath', 'Session_01/Emotional_faces_gray/woman_sub36/fear.jpg')]),
      OrderedDict([('partA_condition', '负脸正词'), ('partA_participant_id', 'woman_sub36'), ('partA_face_emotion', 'disgust'), ('partA_face_valence', 'negative'), ('partA_word', '顺利'), ('partA_word_valence', 'positive'), ('partA_word_Valence_Mean', np.float64(1.95)), ('partA_word_Arousal_Mean', np.float64(2.39)), ('partA_word_subTF', np.int64(1454)), ('partA_word_Familiarity', np.float64(6.181818182)), ('partA_word_NOM', np.int64(1)), ('partA_jitter', np.float64(0.4)), ('partA_iti', np.float64(0.97)), ('partA_facepath', 'Session_01/Emotional_faces_gray/woman_sub36/disgust.jpg')])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
    Routine MainISI
    Routine MainStim
    Routine MainITI
  LoopTerminator trials
  Routine endroutinecode
  Routine Resting_EO
  Routine ExpIntro
  Routine beginroutinecode
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Session_01/Session_01_260607_partB.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('partB_condition', '负脸正词'), ('partB_participant_id', 'woman_sub46'), ('partB_face_emotion', 'fear'), ('partB_face_valence', 'negative'), ('partB_word', '亲切'), ('partB_word_valence', 'positive'), ('partB_word_Valence_Mean', np.float64(1.8)), ('partB_word_Arousal_Mean', np.float64(2.38)), ('partB_word_subTF', np.int64(148)), ('partB_word_Familiarity', np.float64(6.0)), ('partB_word_NOM', np.int64(2)), ('partB_jitter', np.float64(0.32)), ('partB_iti', np.float64(0.92)), ('partB_facepath', 'Session_01/Emotional_faces_gray/woman_sub46/fear.jpg')]),
      OrderedDict([('partB_condition', '正性一致'), ('partB_participant_id', 'man_sub54'), ('partB_face_emotion', 'happiness'), ('partB_face_valence', 'positive'), ('partB_word', '礼貌'), ('partB_word_valence', 'positive'), ('partB_word_Valence_Mean', np.float64(2.0)), ('partB_word_Arousal_Mean', np.float64(2.38)), ('partB_word_subTF', np.int64(723)), ('partB_word_Familiarity', np.float64(6.090909091)), ('partB_word_NOM', np.int64(1)), ('partB_jitter', np.float64(0.44)), ('partB_iti', np.float64(0.86)), ('partB_facepath', 'Session_01/Emotional_faces_gray/man_sub54/happiness.jpg')]),
      OrderedDict([('partB_condition', '正性一致'), ('partB_participant_id', 'woman_sub19'), ('partB_face_emotion', 'happiness'), ('partB_face_valence', 'positive'), ('partB_word', '刻苦'), ('partB_word_valence', 'positive'), ('partB_word_Valence_Mean', np.float64(1.92)), ('partB_word_Arousal_Mean', np.float64(2.5)), ('partB_word_subTF', np.int64(60)), ('partB_word_Familiarity', np.float64(6.136363636)), ('partB_word_NOM', np.int64(2)), ('partB_jitter', np.float64(0.49)), ('partB_iti', np.float64(1.09)), ('partB_facepath', 'Session_01/Emotional_faces_gray/woman_sub19/happiness.jpg')]),
      OrderedDict([('partB_condition', '负脸正词'), ('partB_participant_id', 'woman_sub12'), ('partB_face_emotion', 'disgust'), ('partB_face_valence', 'negative'), ('partB_word', '荣誉'), ('partB_word_valence', 'positive'), ('partB_word_Valence_Mean', np.float64(2.31)), ('partB_word_Arousal_Mean', np.float64(2.95)), ('partB_word_subTF', np.int64(487)), ('partB_word_Familiarity', np.float64(6.318181818)), ('partB_word_NOM', np.int64(1)), ('partB_jitter', np.float64(0.45)), ('partB_iti', np.float64(1.12)), ('partB_facepath', 'Session_01/Emotional_faces_gray/woman_sub12/disgust.jpg')])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
    Routine MainISI_B
    Routine MainStim_B
    Routine MainITI_B
  LoopTerminator trials_2
  Routine endroutinecode
  Routine Ending
