PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '$date_str', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Session_01
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Stable
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    TextComponent text_2
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = +
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    KeyboardComponent key_resp_2
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent sound_2
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_02/02_Stable.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine ExpIntro
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    TextComponent text_3
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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      text:
        接下来屏幕上会呈现不同类型的图片，
        请你自然观看每张图片，
        按照自己的真实感受进行反应，
        无需刻意控制情绪。
    KeyboardComponent key_resp_3
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    SoundComponent sound_3
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_02/03_ExpIntro.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Exp
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    TextComponent text_4
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image
      image [set every repeat] = $filepath
      size = (0.8, 0.8)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
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    SerialOutComponent serialPort_2
      deviceLabel = COM
      getResponse = False
      startDataBinary = 3
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 1
      stopDataBinary = 1111000
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 4
      stopDataStr = x
      stopDataType = num
      stopVal [duration (s)] = 3
      syncScreenRefresh = False
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  Routine RestingEC
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    TextComponent text_8
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = +
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    KeyboardComponent key_resp_6
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent sound_4
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_02/06_RestingEC.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    SerialOutComponent serialPort
      deviceLabel = COM
      getResponse = False
      startDataBinary = 1
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 0.0
      stopDataBinary = 2
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [duration (s)] = 180
      syncScreenRefresh = False
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  Routine Welcome
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    TextComponent text
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 按下y以开始试验
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    KeyboardComponent key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_02/01_Welcome.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Kessler_2
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    TextComponent text_11
      durationEstim = 10
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 请评价你现在的困倦程度：
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    SoundComponent sound_6
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_02/08_Kessler_2.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    SliderComponent slider_4
      color = $(1.0000, 1.0000, 1.0000)
      durationEstim = 10
      font = Noto Sans SC
      forceEndRoutine = True
      granularity = 1
      labels = '完全清醒','一般困倦','几乎睡着'
      letterHeight = 0.035
      pos = (0, -0.15)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7 ,8, 9)
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    SerialOutComponent serialPort_6
      deviceLabel = COM
      durationEstim = 10
      getResponse = False
      startDataBinary = 2
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 0.0
      stopDataBinary = 4
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [condition] = slider_4.rating
      syncScreenRefresh = False
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  Routine Kessler_1
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    TextComponent text_9
      durationEstim = 10
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 请评价你现在的疲劳程度：
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    SoundComponent sound_5
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_02/07_Kessler_1.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    SliderComponent slider_3
      color = $(1.0000, 1.0000, 1.0000)
      durationEstim = 10
      font = Noto Sans SC
      forceEndRoutine = True
      granularity = 1
      labels = '完全不疲劳','一般疲劳','非常疲劳'
      letterHeight = 0.035
      pos = (0, -0.15)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7 ,8, 9)
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    SerialOutComponent serialPort_5
      deviceLabel = COM
      durationEstim = 10
      getResponse = False
      startDataBinary = 1
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 0.0
      stopDataBinary = 3
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [condition] = slider_3.rating
      syncScreenRefresh = False
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  Routine valence
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    TextComponent valencetext
      durationEstim = 3
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = 请评价这张图片带给你的情绪愉悦度：
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    SliderComponent slider
      color = $(1.0000, 1.0000, 1.0000)
      durationEstim = 3
      font = Noto Sans SC
      forceEndRoutine = True
      granularity = 1
      labels = '非常不愉快','没有感觉','非常愉快'
      letterHeight = 0.035
      pos = (0, -0.15)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7 ,8, 9)
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    SerialOutComponent serialPort_3
      deviceLabel = COM
      durationEstim = 3
      getResponse = False
      startDataBinary = 5
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 0.0
      stopDataBinary = 6
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [condition] = slider.rating
      syncScreenRefresh = False
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  Routine arousal
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    TextComponent arousaltext
      durationEstim = 3
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0
      text = 请评价这张图片带给你的唤醒程度：
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    SliderComponent slider_2
      color = $(1.0000, 1.0000, 1.0000)
      durationEstim = 3
      font = Noto Sans SC
      forceEndRoutine = True
      granularity = 1
      labels = '非常平静','没有感觉','非常强烈'
      letterHeight = 0.035
      pos = (0, -0.15)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7 ,8, 9)
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    SerialOutComponent serialPort_4
      deviceLabel = COM
      durationEstim = 3
      getResponse = False
      startDataBinary = 1
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 0.0
      stopDataBinary = 2
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [condition] = slider_2.rating
      syncScreenRefresh = False
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  Routine isiroutine
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    TextComponent isitext
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = $isi_dur
      text = +
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Flow
  Routine Welcome
  Routine Stable
  Routine RestingEC
  Routine ExpIntro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Session_02/Session_02.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('filepath', 'Session_02/images/positive/1177.jpg'), ('category', 'Positive'), ('isi_dur', np.float64(2.5)), ('valence', np.float64(2.46)), ('arousal', np.float64(5.48)), ('dominance', np.float64(3.15))]),
      OrderedDict([('filepath', 'Session_02/images/negative/_3488.jpg'), ('category', 'Negative'), ('isi_dur', np.float64(3.5)), ('valence', np.float64(7.85)), ('arousal', np.float64(6.37)), ('dominance', np.float64(8.13))]),
      OrderedDict([('filepath', 'Session_02/images/positive/1056.jpg'), ('category', 'Positive'), ('isi_dur', np.float64(3.0)), ('valence', np.float64(6.78)), ('arousal', np.float64(5.13)), ('dominance', np.float64(5.96))]),
      OrderedDict([('filepath', 'Session_02/images/positive/1136.jpg'), ('category', 'Positive'), ('isi_dur', np.float64(3.5)), ('valence', np.float64(6.72)), ('arousal', np.float64(4.78)), ('dominance', np.float64(6.96))]),
      OrderedDict([('filepath', 'Session_02/images/neutral/2009.jpg'), ('category', 'Neutral'), ('isi_dur', np.float64(2.0)), ('valence', np.float64(6.67)), ('arousal', np.float64(4.78)), ('dominance', np.float64(6.54))]),
      OrderedDict([('filepath', 'Session_02/images/negative/_3375.jpg'), ('category', 'Negative'), ('isi_dur', np.float64(3.0)), ('valence', np.float64(5.93)), ('arousal', np.float64(4.17)), ('dominance', np.float64(5.09))])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
    Routine Exp
    Routine valence
    Routine arousal
    Routine isiroutine
  LoopTerminator trials
  Routine Kessler_1
  Routine Kessler_2
