PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'$date_str', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Session_01
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Welcome
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    TextComponent text_4
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 按下y以开始试验
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    KeyboardComponent key_resp
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_03/01_Welcome.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Stable
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    TextComponent text_5
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = +
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    KeyboardComponent key_resp_2
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent sound_2
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_03/02_Stable.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Meditation
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    TextComponent text
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 360
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      text:
        请保持舒适坐姿，身体放松，
        双眼轻闭或注视屏幕中央。
        请将注意力放在自然呼吸上，
        不需要刻意控制呼吸。
        当你发现注意力被想法、
        声音或身体感觉带走时，
        只需轻轻把注意力带回呼吸。
        整个过程中尽量保持清醒和放松。
    KeyboardComponent key_resp_4
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent sound_3
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_03/03_Meditation.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    SerialOutComponent serialPort
      deviceLabel = COM
      getResponse = False
      startDataBinary = 1
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 0.0
      stopDataBinary = 2
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [duration (s)] = 60
      syncScreenRefresh = False
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    SerialOutComponent serialPort_2
      deviceLabel = COM
      getResponse = False
      startDataBinary = 3
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 120
      stopDataBinary = 4
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [duration (s)] = 60
      syncScreenRefresh = False
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    SerialOutComponent serialPort_3
      deviceLabel = COM
      getResponse = False
      startDataBinary = 5
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 240
      stopDataBinary = 6
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [duration (s)] = 60
      syncScreenRefresh = False
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  Routine Resting_EC
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    TextComponent text_6
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = +
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    KeyboardComponent key_resp_3
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent sound_4
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_03/04_MeditationEnd.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    SerialOutComponent serialPort_5
      deviceLabel = COM
      getResponse = False
      startDataBinary = 3
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 0.0
      stopDataBinary = 4
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [duration (s)] = 120
      syncScreenRefresh = False
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  Routine Imaging
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    TextComponent text_3
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      text = +
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    TextComponent text_2
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 60.0
      stopVal [duration (s)] = 60.0
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      text:
        请回忆或想象针刺时可能出现的感觉，
        例如酸、麻、胀、重、放松或轻微牵拉感。
        请尽量在脑中体验这种感觉，
        但不要移动身体。
        屏幕提示’休息’时，请停止想象，
        注视屏幕中央并自然放松。
    KeyboardComponent key_resp_5
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent sound_5
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_03/05_ImagingStart.wav
      startVal [time (s)] = 60
      stopVal [duration (s)] = 20
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    SoundComponent sound_6
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_03/06_ImagingRest.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    SerialOutComponent serialPort_6
      deviceLabel = COM
      getResponse = False
      startDataBinary = 5
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 0.0
      stopDataBinary = 6
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [duration (s)] = 60
      syncScreenRefresh = False
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    SerialOutComponent serialPort_7
      deviceLabel = COM
      getResponse = False
      startDataBinary = 1
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 60
      stopDataBinary = 2
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [duration (s)] = 60
      syncScreenRefresh = False
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  Routine Ending
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    TextComponent text_7
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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    SoundComponent sound_7
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_03/09_Finish.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine RateMed
    TextComponent text_9
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = 请评价你在冥想过程中的放松程度：
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
    SoundComponent sound_9
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_03/04_RelaxRating.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    SliderComponent slider
      color = $(1.0000, 1.0000, 1.0000)
      font = Noto Sans SC
      forceEndRoutine = True
      granularity = 1
      labels = '完全不放松','一般放松','非常放松'
      letterHeight = 0.035
      pos = (0, -0.15)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    SerialOutComponent serialPort_4
      deviceLabel = COM
      durationEstim = 10
      getResponse = False
      startDataBinary = 1
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 0.0
      stopDataBinary = 2
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [condition] = slider.rating
      syncScreenRefresh = False
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  Routine RateIma
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    TextComponent text_8
      font = Noto Sans SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = 请评价你想象针刺感觉（酸、麻、胀、重）的清晰程度：
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    SliderComponent slider_2
      color = $(1.0000, 1.0000, 1.0000)
      font = Noto Sans SC
      forceEndRoutine = True
      granularity = 1
      labels = '完全无法想象','可以想象一些','非常清晰逼真'
      letterHeight = 0.035
      pos = (0, -0.15)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    SoundComponent sound_8
      forceEndRoutine = False
      sound [set every repeat] = audio_prompts/Session_03/09_ImagingRating.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    SerialOutComponent serialPort_8
      deviceLabel = COM
      durationEstim = 10
      getResponse = False
      startDataBinary = 3
      startDataChar = \x72
      startDataCode = b'r'
      startDataNumeric = 114
      startDataStr = r
      startDataType = binary
      startVal [time (s)] = 0.0
      stopDataBinary = 4
      stopDataChar = \x78
      stopDataCode = b'x'
      stopDataNumeric = 120
      stopDataStr = x
      stopDataType = binary
      stopVal [condition] = slider_2.rating
      syncScreenRefresh = False
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Flow
  Routine Welcome
  Routine Stable
  Routine Meditation
  Routine RateMed
  Routine Resting_EC
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine Imaging
  LoopTerminator trials
  Routine RateIma
  Routine Resting_EC
  Routine Ending
